PsychoPy2experiment version="2021.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = recognitiontask
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Routines
  Routine Intro
    TextComponent introtext
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        This task will ask you some questions about All Hail King Julien, episode 2. Some answer choices will be written, and some will use pictures.
        Press the ‘a’, ‘b’, or ‘c’ key on the keyboard to select your answer choice.

        Press Enter/Return to go to the next screen.
    KeyboardComponent introresp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      store = nothing
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  Routine ImageQs
    TextComponent questionimage
      color = black
      letterHeight = 0.06
      pos = (0, .22)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $imagequestion
      wrapWidth = 1.5
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    ImageComponent image1
      image [set every repeat] = $imagechoicea
      pos = (-.4, -.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image2
      image [set every repeat] = $imagechoiceb
      pos = (0, -.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image3
      image [set every repeat] = $imagechoicec
      pos = (.4, -.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent atext
      color = black
      letterHeight = 0.05
      pos = (-.4, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = a
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    TextComponent btext
      color = black
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = b
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    TextComponent ctext
      color = black
      letterHeight = 0.05
      pos = (.4, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = c
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    KeyboardComponent imageresponse
      allowedKeys = 'a','b','c'
      correctAns = $imagecorrect
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine TextQs
    TextComponent questiontext
      color = black
      letterHeight = 0.06
      pos = (0, .22)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $textquestion
      wrapWidth = 1.5
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    TextComponent textchoice1
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $lettera + textchoicea
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    TextComponent textchoice2
      color = black
      letterHeight = 0.05
      pos = (0, -.12)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $letterb + textchoiceb
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    TextComponent textchoice3
      color = black
      letterHeight = 0.05
      pos = (0, -.24)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $letterc + textchoicec
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    KeyboardComponent textresponse
      allowedKeys = 'a','b','c'
      correctAns = $textcorrect
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Exit
    TextComponent exittext
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thanks for participating! You can tell the researcher you have finished.
      wrapWidth = 1.5
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    KeyboardComponent exitresponse
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = recognitionsheet.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('textquestion', 'The boat King Julien presents to the other lemurs isn’t really a boat. What is it? '), ('lettera', 'a. '), ('textchoicea', 'a toilet'), ('letterb', 'b. '), ('textchoiceb', 'a shoebox'), ('letterc', 'c. '), ('textchoicec', 'a bike helmet'), ('textcorrect', 'a'), ('imagequestion', 'Which character makes the tree fall over so everyone has to run? '), ('imagechoicea', 'mort.png'), ('imagechoiceb', 'xixi.png'), ('imagechoicec', 'maurice.png'), ('imagecorrect', 'a')]),
      OrderedDict([('textquestion', 'Why is King Julien sad when he learns how the other lemurs feel about him? '), ('lettera', 'a. '), ('textchoicea', 'the lemurs liked his dad better'), ('letterb', 'b. '), ('textchoiceb', "one lemur in the kingdom doesn't like him"), ('letterc', 'c. '), ('textchoicec', "all the lemurs think he's doing a bad job"), ('textcorrect', 'b'), ('imagequestion', 'Which of these characters protects King Julien and tries to solve the case of who doesn’t like him?'), ('imagechoicea', 'willie.png'), ('imagechoiceb', 'clover.png'), ('imagechoicec', 'maurice.png'), ('imagecorrec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,
      OrderedDict([('textquestion', 'What does Maurice use to count the people who don’t like King Julien? '), ('lettera', 'a. '), ('textchoicea', 'rocks on a shelf'), ('letterb', 'b. '), ('textchoiceb', 'markings on the wall'), ('letterc', 'c. '), ('textchoicec', 'fruit on a stick'), ('textcorrect', 'c'), ('imagequestion', 'Which of these characters is always telling King Julien they love him?'), ('imagechoicea', 'clover.png'), ('imagechoiceb', 'maurice.png'), ('imagechoicec', 'mort.png'), ('imagecorrect', 'c')]),
      OrderedDict([('textquestion', "Why does King Julien call in the lizard when the toucan won't tell him which lemur doesn't like him?"), ('lettera', 'a. '), ('textchoicea', "so the lizard will read the toucan's mind"), ('letterb', 'b. '), ('textchoiceb', 'so the lizard will scare the toucan into telling him'), ('letterc', 'c. '), ('textchoicec', 'so the lizard will hypnotize the toucan'), ('textcorrect', 'a'), ('imagequestion', 'Which of these characters can read minds and tell the future? '), ('imagechoicea', 'masikura.png'), ('imagechoiceb', 'xixi.png'), ('imagechoicec', 'hector.png'), ('image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
    Routine ImageQs
    Routine TextQs
  LoopTerminator trials
  Routine Exit
