PsychoPy2experiment version="2021.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = KJTemporalOrderTask
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Routines
  Routine Intro
    TextComponent introtext
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        This task will show you pairs of screen shots with captions depicting events from All Hail King Julien, episode 2. Your job is to pick which event came first.
        Press ‘1’ on the keyboard to choose the top image and ‘2’ to choose the bottom image.

        Press Enter/Return to go to the next screen.
    KeyboardComponent introresp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PresentImages
    ImageComponent imagetop
      image [set every repeat] = $image1
      pos = (0.07, .14)
      saveStartStop = False
      size = (0.5024, 0.28504)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent imagebottom
      image [set every repeat] = $image2
      pos = (0.07, -0.19)
      saveStartStop = False
      size = (0.5024, 0.28504)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent tasktext
      color = black
      letterHeight = 0.05
      pos = (0, .42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Which one of these happened first?
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    KeyboardComponent response
      allowedKeys = '1','2'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text1
      color = black
      letterHeight = 0.1
      pos = (-.275, .175)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text2
      color = black
      letterHeight = 0.1
      pos = (-.275, -.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent toptext
      color = black
      letterHeight = 0.025
      pos = [0.07, .32]
      startVal [time (s)] = 0.0
      text [set every repeat] = $image1caption
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    TextComponent bottomtext
      color = black
      letterHeight = 0.025
      pos = [0.07, -.375]
      startVal [time (s)] = 0.0
      text [set every repeat] = $image2caption
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  Routine Exit
    TextComponent exittext
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thanks for participating! You can tell the researcher you have finished.
      wrapWidth = 1.5
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    KeyboardComponent exitresp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = temporalorder_v1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('type', 'bw'), ('image1', 'Boundary9b.png'), ('image1cat', 'b'), ('image1order', 37), ('image1caption', "King Julian enters Hector's house and sees a tower of matches"), ('image2', 'Within1a.png'), ('image2cat', 'w'), ('image2order', 2), ('image2caption', 'Maurice gets on stage in front of all the lemurs in the kingdom'), ('correct', 2)]),
      OrderedDict([('type', 'ww'), ('image1', 'Within17a.png'), ('image1cat', 'w'), ('image1order', 66), ('image1caption', 'Everyone finds Clover asleep on her investigation boards'), ('image2', 'Within9a.png'), ('image2cat', 'w'), ('image2order', 34), ('image2caption', 'King Julian shows up at the lemur interview in a fake moustache'), ('correct', 2)]),
      OrderedDict([('type', 'bw'), ('image1', 'Within4a.png'), ('image1cat', 'w'), ('image1order', 14), ('image1caption', 'Gigi tells King Julian the news for the day'), ('image2', 'Boundary18b.png'), ('image2cat', 'b'), ('image2order', 73), ('image2caption', 'King Julian runs out of mangoes to give away'), ('correct', 1)]),
      OrderedDict([('type', 'ww'), ('image1', 'Within15b.png'), ('image1cat', 'w'), ('image1order', 59), ('image1caption', "King Julian asks the skeleton if there is anyone who doesn't like mangoes"), ('image2', 'Within18a.png'), ('image2cat', 'w'), ('image2order', 70), ('image2caption', 'Hector gets a free mango'), ('correct', 1)])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
    Routine PresentImages
  LoopTerminator trials
  Routine Exit
