PsychoPy2experiment version="2021.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = KJTemporalOrderTask
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Routines
  Routine Intro
    TextComponent introtext
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        This task will show you pairs of screen shots with captions depicting events from All Hail King Julien, episode 2. Your job is to pick which event came first.
        Press ‘1’ on the keyboard to choose the top image and ‘2’ to choose the bottom image.

        Press Enter/Return to go to the next screen.
    KeyboardComponent introresp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PresentImages
    ImageComponent imagetop
      image [set every repeat] = $image1
      pos = (0.07, .14)
      saveStartStop = False
      size = (0.5024, 0.28504)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent imagebottom
      image [set every repeat] = $image2
      pos = (0.07, -0.19)
      saveStartStop = False
      size = (0.5024, 0.28504)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent tasktext
      color = black
      letterHeight = 0.05
      pos = (0, .42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Which one of these happened first?
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    KeyboardComponent response
      allowedKeys = '1','2'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text1
      color = black
      letterHeight = 0.1
      pos = (-.275, .175)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text2
      color = black
      letterHeight = 0.1
      pos = (-.275, -.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent toptext
      color = black
      letterHeight = 0.025
      pos = [0.07, .32]
      startVal [time (s)] = 0.0
      text [set every repeat] = $image1caption
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    TextComponent bottomtext
      color = black
      letterHeight = 0.025
      pos = [0.07, -.375]
      startVal [time (s)] = 0.0
      text [set every repeat] = $image2caption
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  Routine Exit
    TextComponent exittext
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thanks for participating! You can tell the researcher you have finished.
      wrapWidth = 1.5
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    KeyboardComponent exitresp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = temporalorder_v3.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('type', 'bb'), ('image1', 'Boundary3b'), ('image1cat', 'b'), ('image1order', 13), ('image1caption', 'Julian is carried away after being announces as the new king'), ('image2', 'Boundary16a'), ('image2cat', 'b'), ('image2order', 64), ('image2caption', 'Clover needs more evidence to figure out who the hater is'), ('correct', 1)]),
      OrderedDict([('type', 'bb'), ('image1', 'Boundary7a'), ('image1cat', 'b'), ('image1order', 28), ('image1caption', "Clover tells King Julian he's safe but asks for a meeting with him"), ('image2', 'Boundary12a'), ('image2cat', 'b'), ('image2order', 48), ('image2caption', 'King Julian makes a plan to kiss all the baby lemurs'), ('correct', 1)]),
      OrderedDict([('type', 'ww'), ('image1', 'Within11b'), ('image1cat', 'w'), ('image1order', 43), ('image1caption', "Looking for kumquats taken off after Hector's house blows up"), ('image2', 'Within3a'), ('image2cat', 'w'), ('image2order', 10), ('image2caption', 'King Julian hits a soda bottle on the toilet boat'), ('correct', 2)]),
      OrderedDict([('type', 'ww'), ('image1', 'Within15b'), ('image1cat', 'w'), ('image1order', 59), ('image1caption', "King Julian asks the skeleton if there is anyone who doesn't like mangoes"), ('image2', 'Within1a'), ('image2cat', 'w'), ('image2order', 2), ('image2caption', 'Maurice gets on stage in front of all the lemurs in the kingdom'), ('correct', 2)])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
    Routine PresentImages
  LoopTerminator trials
  Routine Exit
