PsychoPy2experiment version="2021.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = KJTemporalOrderTask
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Routines
  Routine Intro
    TextComponent introtext
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        This task will show you pairs of screen shots with captions depicting events from All Hail King Julien, episode 2. Your job is to pick which event came first.
        Press ‘1’ on the keyboard to choose the top image and ‘2’ to choose the bottom image.

        Press Enter/Return to go to the next screen.
    KeyboardComponent introresp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PresentImages
    ImageComponent imagetop
      image [set every repeat] = $image1
      pos = (0.07, .14)
      saveStartStop = False
      size = (0.5024, 0.28504)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent imagebottom
      image [set every repeat] = $image2
      pos = (0.07, -0.19)
      saveStartStop = False
      size = (0.5024, 0.28504)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent tasktext
      color = black
      letterHeight = 0.05
      pos = (0, .42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Which one of these happened first?
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    KeyboardComponent response
      allowedKeys = '1','2'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text1
      color = black
      letterHeight = 0.1
      pos = (-.275, .175)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text2
      color = black
      letterHeight = 0.1
      pos = (-.275, -.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent toptext
      color = black
      letterHeight = 0.025
      pos = [0.07, .32]
      startVal [time (s)] = 0.0
      text [set every repeat] = $image1caption
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    TextComponent bottomtext
      color = black
      letterHeight = 0.025
      pos = [0.07, -.375]
      startVal [time (s)] = 0.0
      text [set every repeat] = $image2caption
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  Routine Exit
    TextComponent exittext
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thanks for participating! You can tell the researcher you have finished.
      wrapWidth = 1.5
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    KeyboardComponent exitresp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = temporalorder_v4.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('type', 'bb'), ('image1', 'Boundary13b'), ('image1cat', 'b'), ('image1order', 53), ('image1caption', "Eating kumquats after King Julian's bad ratings from baby kissing"), ('image2', 'Boundary7b'), ('image2cat', 'b'), ('image2order', 29), ('image2caption', 'Clover tells King Julian she thinks there is a conspiracy'), ('correct', 2)]),
      OrderedDict([('type', 'bw'), ('image1', 'Within18a'), ('image1cat', 'w'), ('image1order', 70), ('image1caption', 'Hector gets a free mango'), ('image2', 'Within6a'), ('image2cat', 'w'), ('image2order', 22), ('image2caption', 'Maurice creates the kumquat-o-meter with the fruit on the stick'), ('correct', 2)]),
      OrderedDict([('type', 'bw'), ('image1', 'Within4b'), ('image1cat', 'w'), ('image1order', 15), ('image1caption', 'King Julian finds out only 99% of the lemurs like him'), ('image2', 'Within8a'), ('image2cat', 'w'), ('image2order', 30), ('image2caption', 'Maurice and Clover argue about the best way to find the hater'), ('correct', 1)]),
      OrderedDict([('type', 'bb'), ('image1', 'Boundary4a'), ('image1cat', 'b'), ('image1order', 16), ('image1caption', 'Clover tells King Julian to make it illegal not to like him'), ('image2', 'Boundary1a'), ('image2cat', 'b'), ('image2order', 4), ('image2caption', 'Clover walks into the crowd as Julian is announced king'), ('correct', 2)])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
    Routine PresentImages
  LoopTerminator trials
  Routine Exit
